PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'gender': '["男","女"]', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1536, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = Flankertask
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent arrow1
      fillColor = white
      ori [set every repeat] = other_ori
      pos [set every repeat] = (-3, stimu_pos)
      shape = arrow
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.3
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    PolygonComponent arrow2
      fillColor = white
      ori [set every repeat] = other_ori
      pos [set every repeat] = (-1.5, stimu_pos)
      shape = arrow
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.3
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    PolygonComponent target_arrow
      fillColor = white
      ori [set every repeat] = target_ori
      pos [set every repeat] = (0, stimu_pos)
      shape = arrow
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.3
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    PolygonComponent arrow3
      fillColor = white
      ori [set every repeat] = other_ori
      pos [set every repeat] = (1.5, stimu_pos)
      shape = arrow
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.3
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    PolygonComponent arrow4
      fillColor = white
      ori [set every repeat] = other_ori
      pos [set every repeat] = (3, stimu_pos)
      shape = arrow
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.3
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    PolygonComponent stimu_pre
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = stimu_opa
      pos [set every repeat] = (0, stimu_pos)
      shape = rectangle
      size = (35, 8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.3
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.3
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    KeyboardComponent resp
      allowedKeys = 'f','j'
      correctAns = $bottom
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.6
      storeCorrect = True
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  Routine instruction
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    TextComponent instru_text
      letterHeight = 0.02
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      units = height
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      text:
        欢迎您参加本实验，请阅读一下实验要求，按要求完成实验：

        实验开始时会持续呈现一个“十字架”的注视点，

        然后出现一个圆圈，在圆圈出现后，请紧盯圆圈

        再之后会开始呈现一排箭头（"←"或"→"）
    TextComponent instru1_text
      color = 0.4196, -1.0000, -1.0000
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      units = height
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      text:
        当中间箭头为“←”时，请按“F”键

        当中间箭头为“→”时，请按“J”键
    TextComponent instru2_text
      letterHeight = 0.02
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        请在保证正确率的情况下尽可能快的完成实验

        接下来，请您按任意键开始实验
    KeyboardComponent instru_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 实验结束，再次感谢您参与该实验！
      units = height
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  Routine ISI
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import random
        duration = random.random() / 2 + 0.05
      End Routine:
        thisExp.addData('random_duration', duration)
    PolygonComponent randomfix
      durationEstim = 0.45
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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  Routine cue_random
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    PolygonComponent cue_fig_2
      fillColor = white
      pos [set every repeat] = (0,cue_pos)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.15
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.55
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  Routine ct_ISI
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        import random
        dur = random.random() * 0.3 + 0.2
      End Routine:
        thisExp.addData('random_duration', dur)
    PolygonComponent ct_randomfix
      durationEstim = 0.5
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
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  Routine judgement
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    CodeComponent judge
      Code Type = Auto->JS
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      Begin Experiment:
        massage=''
        ncorr=[]
      Begin Routine:
        ncorr.append(resp.corr)
        correctans=sum(ncorr)
        totalans=len(ncorr)
        correctrate=float(correctans/totalans)
        if correctrate >= 0.8:
            massage='训练完成，接下来请按任意键开始正式实验'
            outer_loop.finished = True
        else:
            massage='训练失败，接下来请按任意键重新开始训练'
            ncorr.clear()
    TextComponent judge_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $massage
      units = height
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    KeyboardComponent judge_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator outer_loop loopType="TrialHandler"
    loopType = random
    nReps = 999
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    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = Flankertask.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'cue_pos': 5, 'stimu_pos': 5, 'effective': 1, 'other_ori': 90, 'target_ori': 90, 'ot_congruent': 0, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': 5, 'stimu_pos': 5, 'effective': 1, 'other_ori': -90, 'target_ori': 90, 'ot_congruent': 1, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': 5, 'stimu_pos': 5, 'effective': 1, 'other_ori': 90, 'target_ori': -90, 'ot_congruent': 1, 'bottom': 'f', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': 5, 'stimu_pos': 5, 'effective': 1, 'other_ori': -90, 'target_ori': -90, 'ot_congruent': 0, 'bottom': 'f', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': -5, 'stimu_pos': -5, 'effective': 1, 'other_ori': 90, 'target_ori': 90, 'ot_congruent': 0, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': -5, 'stimu_pos': -5, 'effective': 1, 'other_ori': -90, 'target_ori': 90, 'ot_congruent': 1, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': -5, 'stimu_pos': -5, 'effective': 1, 'other_ori': 90, 'target_ori': -90, 'ot_congruent': 1, 'bottom': 'f', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': -5, 'stimu_pos': -5, 'effective': 1, 'other_ori': -90, 'target_ori': -90, 'ot_congruent': 0, 'bottom': 'f', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': 5, 'stimu_pos': -5, 'effective': 0, 'other_ori': 90, 'target_ori': 90, 'ot_congruent': 0, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
        {'cue_pos': 5, 'stimu_pos': -5, 'effective': 0, 'other_ori': -90, 'target_ori': 90, 'ot_congruent': 1, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1}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
      Routine ISI
      Routine cue_random
      Routine ct_ISI
      Routine trial
    LoopTerminator practice
    Routine judgement
  LoopTerminator outer_loop
  LoopInitiator formalexp loopType="TrialHandler"
    conditionsFile = Flankertask_formal.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'cue_pos': 5, 'stimu_pos': 5, 'effective': 1, 'other_ori': 90, 'target_ori': 90, 'ot_congruent': 0, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': 5, 'stimu_pos': 5, 'effective': 1, 'other_ori': -90, 'target_ori': 90, 'ot_congruent': 1, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': 5, 'stimu_pos': 5, 'effective': 1, 'other_ori': 90, 'target_ori': -90, 'ot_congruent': 1, 'bottom': 'f', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': 5, 'stimu_pos': 5, 'effective': 1, 'other_ori': -90, 'target_ori': -90, 'ot_congruent': 0, 'bottom': 'f', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': -5, 'stimu_pos': -5, 'effective': 1, 'other_ori': 90, 'target_ori': 90, 'ot_congruent': 0, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': -5, 'stimu_pos': -5, 'effective': 1, 'other_ori': -90, 'target_ori': 90, 'ot_congruent': 1, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': -5, 'stimu_pos': -5, 'effective': 1, 'other_ori': 90, 'target_ori': -90, 'ot_congruent': 1, 'bottom': 'f', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': -5, 'stimu_pos': -5, 'effective': 1, 'other_ori': -90, 'target_ori': -90, 'ot_congruent': 0, 'bottom': 'f', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': 5, 'stimu_pos': -5, 'effective': 0, 'other_ori': 90, 'target_ori': 90, 'ot_congruent': 0, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1},
      {'cue_pos': 5, 'stimu_pos': -5, 'effective': 0, 'other_ori': -90, 'target_ori': 90, 'ot_congruent': 1, 'bottom': 'j', 'stimu_opa': 0, 'zero': 1}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
    Routine ISI
    Routine cue_random
    Routine ct_ISI
    Routine trial
  LoopTerminator formalexp
  Routine thanks
